perp_no_air_realVS                                                              #!GUI1.0
0
/home/spencermrobinson/egs_home/egsphant/perp_real.egsphant
0.516, 0.005, 0
0, 0, 1, 
0, 1, 0, 0, 0, 180, 90, 3, 3, 0, 
1, 0, 0, 0, 0, 0, 0, 0
/scratch/dylanb/EGSnrc/HEN_HOUSE/spectra/mohan6.spectrum
700000000, 0, 500, 33, 97, 100.0, 0, 4, 0, 0, , 0, 0, 0, 1, 0, 0
 #########################
 :Start MC Transport Parameter:
 
 Global ECUT= 0.516
 Global PCUT= 0.005
 Global SMAX= 5
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= PRESTA-I
 Skin depth for BCA= 0
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= Simple
 Brems cross sections= BH
 Bound Compton scattering= On
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= BH
 Photoelectron angular sampling= Off
 Rayleigh scattering= On
 Atomic relaxations= On
 Electron impact ionization= On
 Photon cross sections= xcom
 Photon cross-sections output= Off
 
 :Stop MC Transport Parameter:
 #########################
